PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.co/submissions/complete?cc=C13Q10VB
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['images/FOREHEAD_CFD_BF_224_002_N.png', 'images/LIP_CFD_WF_002_004_N.png', 'images/LIP_CFD_WF_250_167_N.png', 'images/FOREHEAD_136_M_M_N_A.png', 'images/LCHEEK_136_M_M_N_A.png', 'images/LIP_136_M_M_N_A.png', 'images/NASALTIP_136_M_M_N_A.png', 'images/RCHEEK_136_M_M_N_A.png', 'images/FOREHEAD_035_M_F_N_A.png', 'images/LCHEEK_035_M_F_N_A.png', 'images/LIP_035_M_F_N_A.png', 'images/NASALTIP_035_M_F_N_A.png', 'images/RCHEEK_035_M_F_N_A.png', 'images/FOREHEAD_087_M_M_N_A.png', 'images/LCHEEK_087_M_M_N_A.png', 'images/LIP_087_M_M_N_A.png', 'images/NASALTIP_087_M_M_N_A.png', 'images/RCHEEK_087_M_M_N_A.png', 'images/FOREHEAD_006_M_F_N_A.png', 'images/LCHEEK_006_M_F_N_A.png', 'images/LIP_006_M_F_N_A.png', 'images/NASALTIP_006_M_F_N_A.png', 'images/RCHEEK_006_M_F_N_A.png', 'images/FOREHEAD_CFD_WF_250_167_N.png', 'images/LCHEEK_CFD_WF_250_167_N.png', 'images/NASALTIP_CFD_WF_250_167_N.png', 'images/RCHEEK_CFD_WF_250_167_N.png', 'images/FOREHEAD_CFD_WF_002_004_N.png', 'images/LCHEEK_CFD_WF_002_004_N.png', 'images/NASALTIP_CFD_WF_002_004_N.png', 'images/RCHEEK_CFD_WF_002_004_N.png', 'images/FOREHEAD_CFD_WM_212_097_N.png', 'images/LCHEEK_CFD_WM_212_097_N.png', 'images/LIP_CFD_WM_212_097_N.png', 'images/NASALTIP_CFD_WM_212_097_N.png', 'images/RCHEEK_CFD_WM_212_097_N.png', 'images/FOREHEAD_CFD_WF_200_099_N.png', 'images/LCHEEK_CFD_WF_200_099_N.png', 'images/LIP_CFD_WF_200_099_N.png', 'images/NASALTIP_CFD_WF_200_099_N.png', 'images/RCHEEK_CFD_WF_200_099_N.png', 'images/FOREHEAD_CFD_LM_203_026_N.png', 'images/LCHEEK_CFD_LM_203_026_N.png', 'images/LIP_CFD_LM_203_026_N.png', 'images/NASALTIP_CFD_LM_203_026_N.png', 'images/RCHEEK_CFD_LM_203_026_N.png', 'images/FOREHEAD_CFD_LM_201_057_N.png', 'images/LCHEEK_CFD_LM_201_057_N.png', 'images/LIP_CFD_LM_201_057_N.png', 'images/NASALTIP_CFD_LM_201_057_N.png', 'images/RCHEEK_CFD_LM_201_057_N.png', 'images/FOREHEAD_CFD_LF_224_176_N.png', 'images/LCHEEK_CFD_LF_224_176_N.png', 'images/LIP_CFD_LF_224_176_N.png', 'images/NASALTIP_CFD_LF_224_176_N.png', 'images/RCHEEK_CFD_LF_224_176_N.png', 'images/FOREHEAD_CFD_BM_213_134_N.png', 'images/LCHEEK_CFD_BM_213_134_N.png', 'images/LIP_CFD_BM_213_134_N.png', 'images/NASALTIP_CFD_BM_213_134_N.png', 'images/RCHEEK_CFD_BM_213_134_N.png', 'images/LCHEEK_CFD_BF_224_002_N.png', 'images/LIP_CFD_BF_224_002_N.png', 'images/NASALTIP_CFD_BF_224_002_N.png', 'images/RCHEEK_CFD_BF_224_002_N.png', 'images/LCHEEK_CFD_BM_234_172_N.png', 'images/FOREHEAD_CFD_BM_234_172_N.png', 'images/LIP_CFD_BM_234_172_N.png', 'images/NASALTIP_CFD_BM_234_172_N.png', 'images/RCHEEK_CFD_BM_234_172_N.png', 'images/FOREHEAD_CFD_BF_214_308_N.png', 'images/LCHEEK_CFD_BF_214_308_N.png', 'images/LIP_CFD_BF_214_308_N.png', 'images/NASALTIP_CFD_BF_214_308_N.png', 'images/RCHEEK_CFD_BF_214_308_N.png', 'images/FOREHEAD_CFD_AM_233_236_N.png', 'images/LCHEEK_CFD_AM_233_236_N.png', 'images/LIP_CFD_AM_233_236_N.png', 'images/NASALTIP_CFD_AM_233_236_N.png', 'images/RCHEEK_CFD_AM_233_236_N.png', 'images/FOREHEAD_CFD_AF_231_357_N.png', 'images/LCHEEK_CFD_AF_231_357_N.png', 'images/LIP_CFD_AF_231_357_N.png', 'images/NASALTIP_CFD_AF_231_357_N.png', 'images/RCHEEK_CFD_AF_231_357_N.png', 'images/FOREHEAD_CFD_AF_245_143_N.png', 'images/LCHEEK_CFD_AF_245_143_N.png', 'images/LIP_CFD_AF_245_143_N.png', 'images/NASALTIP_CFD_AF_245_143_N.png', 'images/RCHEEK_CFD_AF_245_143_N.png', 'images/FOREHEAD_CFD_AF_237_223_N.png', 'images/LCHEEK_CFD_AF_237_223_N.png', 'images/LIP_CFD_AF_237_223_N.png', 'images/NASALTIP_CFD_AF_237_223_N.png', 'images/RCHEEK_CFD_AF_237_223_N.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = #8c8c8c
  expName = Skin_canser_faces
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine ITI
    CodeComponent code
      Code Type = Both
      disabled = True
      Begin JS Routine:
        jitter = Math.random() * (1.0-0.5) + 0.5;
        ﻿psychoJS.experiment.addData('ITI',jitter)
      Begin Routine:
        import random
        jitter = random.uniform(0.5, 1.0)
        thisExp.addData('ITI', jitter) # record it in the data file
    TextComponent text
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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  Routine End
    TextComponent EndText
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this study. Below will summarize the study goals.

        Early-stage, low-risk basal cell skin cancer generally portends favourable outcomes and may be readily managed with either a surgical approach or through radiation therapy. Considering both approaches can often be considered, the goal of this study was to better understand the clinical rationale for utilizing one treatment approach over the other.

        Your participation in this study is very much appreciated. Please do not hesitate to contact us if you have further questions.

        Dr. Michael Gupta, MD MSc FRCSC

        Associate Professor
        Department of Otolaryngology, Head and Neck Surgery
        McMaster University
    MouseComponent mouse_8
      clickable = EndText
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.3
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  Routine RatingInstr
    TextComponent RInstr
      color = black
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this study, we need you to rate the “Attractiveness” of the faces that you just saw.

        Please press the “Spacebar” to start.
    KeyboardComponent RKey
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RatingTrial
    CodeComponent code_10
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        positionNext = (0, -0.9)
      Each Frame:
        if (slider_treatment_surgery.getRating()) and (slider_treatment_radiation.getRating()):
            #ratingResult = PracSlider.getRating()
            positionNext = (0, -0.4)
            #startNext = True
        else:
            #ratingResult = "no rating"
            positionNext = (0, -0.9)
            #startNext = False
    ImageComponent face_image
      disabled = True
      flipHoriz = True
      image [set every repeat] = $faceImages
      interpolate = nearest
      pos = (0, 280)
      startVal [time (s)] = 0
      texture resolution = 512
      units = pix
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    SliderComponent slider_treatment_surgery
      borderColor = Black
      color = Black
      disabled = True
      forceEndRoutine = False
      granularity = 0
      labels = ("0% Never", "100% Always")
      letterHeight = 0.03
      size = (1.0, 0.025)
      startVal [time (s)] = 0.3
      styleTweaks = ('labels45', 'triangleMarker')
      styles = ['rating']
      ticks = (0,25,50,75,100)
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    ImageComponent NextBu
      disabled = True
      image = Picture1-eng.png
      interpolate = nearest
      pos [set every frame] = $positionNext
      size = (0.2, 0.1)
      startVal [time (s)] = 0.3
      texture resolution = 512
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    MouseComponent mouse_5
      clickable = NextBu,
      disabled = True
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.3
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    SliderComponent slider_treatment_radiation
      borderColor = Black
      color = Black
      disabled = True
      forceEndRoutine = False
      granularity = 0
      labels = ("0% Never", "100% Always")
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.3
      styleTweaks = ('triangleMarker',)
      styles = ['rating']
      ticks = (0,25,50,75,100)
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    TextComponent text_treatment_surgery
      color = black
      disabled = True
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.3
      text = How likely are you to recommend surgery? 
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    TextComponent text_treatment_radiation
      color = black
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.3
      text = How likely are you to recommend radiation? 
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  Routine instruction
    TextComponent instrBlock
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Each patient below has been diagnosed with a low-risk, non-sclerosing, early-stage basal cell skin cancer. The patients are otherwise in good health. For each face, please indicate how likely you would be to recommend surgery versus radiation in the management of each lesion.
        Please click anywhere to start
    MouseComponent mouse
      clickable = instrBlock
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.5
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  Routine Start
    TextComponent ques_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $"Thank you for taking the time to participate in this questionnaire. We hope these short questions will not take more than a few moments of your time. All answers will be anonymized. Reponses will remain completely confidential and will be used solely for the purposes of this study." + " \n Certain skin cancers of the face can be managed with either surgery and/or radiation. Various patient- and clinician-specific factors may influence a physician’s intervention modality. " + "\n This questionnaire will comprise of three sections. After collecting relevant background information, we will present you several faces with skin cancers and ask you to indicate how likely you are to manage these lesions via radiation and/or surgery. There will be a short debriefing session at the end of the questionnaire. " + "\n Please click anywhere to start."
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    MouseComponent mouse_4
      clickable = ques_instr
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine Questionnaire
    SliderComponent slider_rad_therapy
      forceEndRoutine = False
      granularity = 0
      initVal = 3
      labels = ("Very frequently", "Frequently","Occasionally", "Rarely", "Never")
      letterHeight = 0.03
      pos = (0, 0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_rad_therapy
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How often do you consider referral to radiation therapy for basal cell skin cancers?  
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    SliderComponent slider_surgery
      forceEndRoutine = False
      granularity = 0
      initVal = 3
      labels = ("Very frequently", "Frequently","Occasionally", "Rarely", "Never")
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_surgery
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = How often do you consider surgical excision for basal cell skin cancers?  
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    ImageComponent image
      image = Picture1-eng.png
      pos = (0.7, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    MouseComponent mouse_6
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine FaceQuestions
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        positionNext2 = (0, -0.9)
      Each Frame:
        if (slider_trustworthy.getRating()) and (slider_aggressive.getRating()):
            #ratingResult = PracSlider.getRating()
            positionNext2 = (0, -0.4)
            #startNext = True
        else:
            #ratingResult = "no rating"
            positionNext2 = (0, -0.9)
            #startNext = False
    ImageComponent face_image_q
      image [set every repeat] = $faceImages_q
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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    SliderComponent slider_trustworthy
      forceEndRoutine = False
      granularity = 1
      labels = ("Never trustworthy", "Rarely trustworthy", "Occasionally trustworthy", "Frequently aggressive", "Always aggressive")
      letterHeight = 0.02
      size = (1.0, 0.025)
      startVal [time (s)] = 0.3
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_trustworthy
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.3
      text = How trustworthy would you judge this patient to be?
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    SliderComponent slider_aggressive
      forceEndRoutine = False
      granularity = 1
      labels = ("Never aggressive", "Rarely aggressive", "Rarely aggressive", "Frequently aggressive", "Always aggressive")
      letterHeight = 0.02
      pos = (0, -0.25)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.3
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_aggressive
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.3
      text = How aggressive would you judge this individual to be? 
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    ImageComponent Confirm
      image = Picture1-eng.png
      pos [set every frame] = $positionNext2
      size = (0.2, 0.1)
      startVal [time (s)] = 0.3
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    MouseComponent mouse_7
      clickable = Confirm,
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.3
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  Routine ITI2
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        import random
        jitter = random.uniform(0.5, 1.0)
        thisExp.addData('ITI', jitter) # record it in the data file
    TextComponent text_2
      letterHeight = 0.05
      stopVal [duration (s)] = $jitter
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Flow
  Routine Start
  Routine Questionnaire
  Routine instruction
  LoopInitiator originalFaceTrials loopType="TrialHandler"
    conditionsFile = faceImages.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'faceImages': 'images\\FOREHEAD_006_M_F_N_A.png'},
      {'faceImages': 'images\\FOREHEAD_035_M_F_N_A.png'},
      {'faceImages': 'images\\FOREHEAD_087_M_M_N_A.png'},
      {'faceImages': 'images\\FOREHEAD_136_M_M_N_A.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_AF_231_357_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_AF_237_223_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_AF_245_143_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_AM_233_236_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_BF_214_308_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_BF_224_002_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_BM_213_134_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_BM_234_172_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_LF_224_176_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_LM_201_057_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_LM_203_026_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_WF_002_004_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_WF_200_099_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_WF_250_167_N.png'},
      {'faceImages': 'images\\FOREHEAD_CFD_WM_212_097_N.png'},
      {'faceImages': 'images\\LCHEEK_006_M_F_N_A.png'},
      {'faceImages': 'images\\LCHEEK_035_M_F_N_A.png'},
      {'faceImages': 'images\\LCHEEK_087_M_M_N_A.png'},
      {'faceImages': 'images\\LCHEEK_136_M_M_N_A.png'},
      {'faceImages': 'images\\LCHEEK_CFD_AF_231_357_N.png'},
      {'faceImages': 'images\\LCHEEK_CFD_AF_237_223_N.png'},
      {'faceImages': 'images\\LCHEEK_CFD_AF_245_143_N.png'},
      {'faceImages': 'images\\LCHEEK_CFD_AM_233_236_N.png'},
      {'faceImages': 'images\\LCHEEK_CFD_BF_214_308_N.png'}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
    Routine RatingTrial
    Routine ITI
  LoopTerminator originalFaceTrials
  LoopInitiator faceQuestions loopType="TrialHandler"
    conditionsFile = Rating_BlockOrder.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'faceImages_q': 'images\\FOREHEAD_006_M_F_N_A.png'},
      {'faceImages_q': 'images\\FOREHEAD_035_M_F_N_A.png'},
      {'faceImages_q': 'images\\FOREHEAD_087_M_M_N_A.png'},
      {'faceImages_q': 'images\\FOREHEAD_136_M_M_N_A.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_AF_231_357_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_AF_237_223_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_AF_245_143_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_AM_233_236_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_BF_214_308_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_BF_224_002_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_BM_213_134_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_BM_234_172_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_LF_224_176_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_LM_201_057_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_LM_203_026_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_WF_002_004_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_WF_200_099_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_WF_250_167_N.png'},
      {'faceImages_q': 'images\\FOREHEAD_CFD_WM_212_097_N.png'}]
    Routine FaceQuestions
    Routine ITI2
  LoopTerminator faceQuestions
  Routine End
