PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.1.0
  Window size (pixels) = [1536, 864]
  color = #8c8c8c
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine Start
    TextComponent instruction
      letterHeight = 0.01
      startVal [time (s)] = 0.0
      text = $"Thank you for taking the time to participate in this questionnaire. We hope these short questions will not take more than a few moments of your time. All answers will be anonymized. Reponses will remain completely confidential and will be used solely for the purposes of this study." + " \n Certain skin cancers of the face can be managed with either surgery and/or radiation. Various patient- and clinician-specific factors may influence a physician’s intervention modality. " + "\n This questionnaire will comprise of three sections. After collecting relevant background information, we will present you several faces with skin cancers and ask you to indicate how likely you are to manage these lesions via radiation and/or surgery. There will be a short debriefing session at the end of the questionnaire. " + "\n Please click anywhere to start."
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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Flow
  Routine Start
